dir1 = getDirectory("Choose_Fluorescence_Images_File");
list1 = getFileList(dir1);
for (k=0; k<list1.length; k++){
open(dir1+list1[k]);
// Colour Thresholding-------------
// Color Thresholder 1.53a
// Autogenerated macro, single images only!
min=newArray(3);
max=newArray(3);
filter=newArray(3);
a=getTitle();
run("HSB Stack");
run("Convert Stack to Images");
selectWindow("Hue");
rename("0");
selectWindow("Saturation");
rename("1");
selectWindow("Brightness");
rename("2");
min[0]=120;
max[0]=150;
filter[0]="pass";
min[1]=45;
max[1]=90;
filter[1]="pass";
min[2]=140;
max[2]=180;
filter[2]="pass";
for (i=0;i<3;i++){
  selectWindow(""+i);
  setThreshold(min[i], max[i]);
  run("Convert to Mask");
  if (filter[i]=="stop")  run("Invert");
}
imageCalculator("AND create", "0","1");
imageCalculator("AND create", "Result of 0","2");
for (i=0;i<3;i++){
  selectWindow(""+i);
  close();
}
selectWindow("Result of 0");
close();
selectWindow("Result of Result of 0");
rename(a);
run("Measure");
// Colour Thresholding-------------
//close();
}
